%YAML 1.1
---
# yaml-language-server: $schema=https://raw.githubusercontent.com/harp-tech/reflex-generator/main/schema/device.json
device: InputExpander
whoAmI: 1106
firmwareVersion: "2.3"
hardwareTargets: "1.2"
registers:
  AuxInState:
    address: 32
    type: U8
    access: Event
    maskType: AuxiliaryInputs
    description: Reports the state of the auxiliary inputs.
  AuxInRisingEdge:
    address: 33
    type: U8
    access: Write
    maskType: AuxiliaryInputs
    description: Enables rising edge detection on the auxiliary inputs.
  AuxInFallingEdge:
    address: 34
    type: U8
    access: Write
    maskType: AuxiliaryInputs
    description: Enables falling edge detection on the auxiliary input port.
  DigitalInput:
    address: 35
    type: U16
    access: Event
    length: 2
    payloadSpec:
      DigitalInputState:
        offset: 0
        maskType: DigitalInputs
        description: Reports the state of all digital inputs in the port.
      DigitalInputChanged:
        offset: 1
        maskType: DigitalInputs
        description: Reports which digital inputs changed state in the port.
    description: Reports the state of the digital inputs.
  DigitalInputEnableRisingEdge:
    address: 36
    type: U16
    access: Write
    maskType: DigitalInputs
    description: Enables rising edge detection on the digital input port.
  DigitalInputFallingEdge:
    address: 37
    type: U16
    access: Write
    maskType: DigitalInputs
    description: Enables falling edge detection on the digital input port.
  InputSampleMode:
    address: 38
    type: U8
    access: Write
    maskType: InputSampleModeConfig
    description: Configures the input sample mode.
  EncoderMode:
    address: 39
    type: U8
    access: Write
    payloadSpec:
      SampleRate:
        description: Sets the sample rate of the Encoder.
        maskType: EncoderSampleRate
        mask: 0x7
      Mode:
        description: Sets the acquisition mode of the Encoder.
        mask: 0x8
        maskType: EncoderModeConfig
    description: Configures the rotary encoder acquisition mode.
  Encoder:
    address: 40
    type: S16
    access: Event
    description: Reports the value of the latest read from the rotary encoder.
  ExpansionBoard:
    address: 41
    type: U8
    access: Write
    maskType: ExpansionBoardType
    description: Selects the board to be interfaced with via the expansion port.
bitMasks:
  AuxiliaryInputs:
    bits:
      Aux0: 0x1
      Aux1: 0x2
      Aux0Changed: 0x20
      Aux1Changed: 0x40
    description: Specifies the state of auxiliary input lines.
  DigitalInputs:
    bits:
      DI0: 0x1
      DI1: 0x2
      DI2: 0x4
      DI3: 0x8
      DI4: 0x10
      DI5: 0x20
      DI6: 0x40
      DI7: 0x80
      DI8: 0x100
      DI9: 0x200
    description: Specifies the state of the digital input lines.
groupMasks:
  InputSampleModeConfig:
    values:
      OnInterrupt: 0
      SampleRate1kHz: 1
      SampleRate2kHz: 2
    description: Specifies the input mode configuration from the available list of options.
  EncoderSampleRate:
    values:
      Disabled: 0
      SampleRate250Hz: 1
      SampleRate500Hz: 2
      SampleRate1kHz: 3
      OnMovement: 4
    description: Specifies the available sample modes for the rotary encoder.
  EncoderModeConfig:
    values:
      Position: 0
      Displacement: 1
    description: Specifies the available acquisition modes for the rotary encoder.
  ExpansionBoardType:
    values:
      Breakout: 0
    description: Specifies the available expansion boards implemented.